MacroName CLcomp_shift_angle_alignment
###################################
#
# Script very accurately align CL comp shift and CL comp angle
# works even if the stage Gonio is not accurately at eucentricity
#
# Remove CL aperture before running this script
#
# Use amp-y to adjust the shift and angle in Y only
# Use amp-x to adjust the shift and angle in x only
#
# Center on a feature at high magnification. 
# Go very high under focus i.e. -40 um
# If the feature moves in direction of beam motion adjust CL comp shift.
# If the feature moves perpendicular to the beam motion adjust CL comp angle. 
#
# M.Fislage & R. Efremov Jan 2021
#   
# STATUS: functional
#
###################################
amp_X = 0
amp_Y = 40

ReportBeamShift
sh_X =  $reportedValue1
sh_Y =  $reportedValue2
loop 20 icount
Delay 1 sec
SetBeamShift  $sh_X + $amp_X  $sh_Y + $amp_Y
Delay 1 sec
SetBeamShift  $sh_X - $amp_X  $sh_Y - $amp_Y
echo $icount
 endloop
SetBeamShift  $sh_X  $sh_Y 
